<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:pgr="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pgr:FlyCapture">
          <pgr:Index>2</pgr:Index>
          <pgr:ColorProcessing>Default</pgr:ColorProcessing>
          <pgr:NumBuffers>10</pgr:NumBuffers>
          <pgr:GrabMode>BufferFrames</pgr:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="LeftVideo" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeSubject_FakeProtocol_CameraAcqLeft.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="LeftFrameData" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeSubject_FakeProtocol_CameraAcqLeft.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pgr:FlyCapture">
          <pgr:Index>0</pgr:Index>
          <pgr:ColorProcessing>Default</pgr:ColorProcessing>
          <pgr:NumBuffers>10</pgr:NumBuffers>
          <pgr:GrabMode>BufferFrames</pgr:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RightVideo" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeSubject_FakeProtocol_CameraAcqRight.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RightFrameData" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeSubject_FakeProtocol_CameraAcqRight.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pgr:FlyCapture">
          <pgr:Index>1</pgr:Index>
          <pgr:ColorProcessing>Default</pgr:ColorProcessing>
          <pgr:NumBuffers>10</pgr:NumBuffers>
          <pgr:GrabMode>BufferFrames</pgr:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="BodyVideo" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeSubject_FakeProtocol_CameraAcqBody.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="BodyFrameData" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeSubject_FakeProtocol_CameraAcqBody.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="5" To="12" Label="Source1" />
      <Edge From="5" To="15" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="18" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="18" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source3" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source4" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="26" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="31" Label="Source1" />
      <Edge From="27" To="34" Label="Source1" />
      <Edge From="27" To="37" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="40" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="40" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="40" Label="Source3" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source4" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="43" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="44" To="48" Label="Source1" />
      <Edge From="45" To="47" Label="Source1" />
      <Edge From="46" To="47" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="49" To="53" Label="Source1" />
      <Edge From="49" To="56" Label="Source1" />
      <Edge From="49" To="59" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="62" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="62" Label="Source2" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="62" Label="Source3" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source4" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="65" Label="Source1" />
      <Edge From="64" To="65" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>