<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:pgr="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pgr:FlyCapture">
          <pgr:Index>0</pgr:Index>
          <pgr:ColorProcessing>Default</pgr:ColorProcessing>
          <pgr:NumBuffers>10</pgr:NumBuffers>
          <pgr:GrabMode>DropFrames</pgr:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="Video" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeVideo.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedGPIOPinState,Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="FrameData" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\harrislab\luminoseData\FakeSubject\luminose_hf_videos\Session Videos\FakeFrameData.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>